PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = kwadracik
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Routines
  Routine trial
    PolygonComponent polygon
      durationEstim = 9
      fillColor = $[1,1,1]
      pos [set every frame] = (corx, cory)
      shape = rectangle
      size = (0.5, 0.5)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = 1
      units = cm
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Zobaczysz kwadrat,
        gdy zniknie Twoim zadaniem będzie trzymanie spacji tak długo jak kwadrat
        był na ekranie
Flow
  Routine instr
  LoopInitiator move_it loopType="TrialHandler"
    conditionsFile = ..\..\Moje\kondycje.xlsx
    isTrials = False
    loopType = sequential
    nReps = 120
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    conditions:
      [OrderedDict([('corx', 0.3333333333333333), ('cory', 0.3333333333333333)]),
      OrderedDict([('corx', 0.6666666666666666), ('cory', 0.6666666666666666)]),
      OrderedDict([('corx', 1.0), ('cory', 1.0)]),
      OrderedDict([('corx', 1.3333333333333333), ('cory', 1.3333333333333333)]),
      OrderedDict([('corx', 1.6666666666666665), ('cory', 1.6666666666666665)]),
      OrderedDict([('corx', 1.9999999999999998), ('cory', 1.9999999999999998)]),
      OrderedDict([('corx', 2.333333333333333), ('cory', 2.333333333333333)]),
      OrderedDict([('corx', 2.6666666666666665), ('cory', 2.6666666666666665)]),
      OrderedDict([('corx', 3.0), ('cory', 3.0)]),
      OrderedDict([('corx', 3.3333333333333335), ('cory', 3.3333333333333335)]),
      OrderedDict([('corx', 3.666666666666667), ('cory', 3.666666666666667)]),
      OrderedDict([('corx', 4.0), ('cory', 4.0)]),
      OrderedDict([('corx', 4.333333333333333), ('cory', 4.333333333333333)]),
      OrderedDict([('corx', 4.666666666666666), ('cory', 4.666666666666666)]),
      OrderedDict([('corx', 4.999999999999999), ('cory', 4.999999999999999)]),
      OrderedDict([('corx', 5.333333333333332), ('cory', 5.333333333333332)]),
      OrderedDict([('corx', 5.666666666666665), ('cory', 5.666666666666665)]),
      OrderedDict([('corx', 5.999999999999998), ('cory', 5.999999999999998)]),
      OrderedDict([('corx', 6.333333333333331), ('cory', 6.333333333333331)]),
      OrderedDict([('corx', 6.666666666666664), ('cory', 6.666666666666664)]),
      OrderedDict([('corx', 6.999999999999997), ('cory', 6.999999999999997)]),
      OrderedDict([('corx', 7.33333333333333), ('cory', 7.33333333333333)])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
    Routine trial
  LoopTerminator move_it
